//qFunctions
function montageMaker(dir)	{
	// get name of original image and use a modified form for save at the end
	win = getTitle();
	// check how many slices/channels
	Stack.getDimensions(width, height, channels, slices, frames);
	getPixelSize(unit, pixelWidth, pixelHeight);
	run("Stack to Images");
	numImages = nImages;
	imgArray = newArray(numImages);
	colArray = newArray(numImages);
	mArray = newArray(numImages + 1);
	mArray[0] = "*None*";
	grayChoiceArray = newArray(numImages);
	for (i=0; i<numImages; i++)	{
		selectImage(i+1);
		run("Grays");
		imgArray[i] = getImageID();
		title = getTitle();
		colArray[i] = title;
		mArray[i+1] = title;
		grayChoiceArray[i] = d2s(i+1,0);
	}
	// give the option of making up to 3 merges (only because dialog would get too unwiedly with more)
	Dialog.create("Montage Choice");
	Dialog.addMessage("How many grayscale panels?");
	Dialog.addChoice("Gray panels", grayChoiceArray);
	Dialog.addMessage("How many merge panels?");
	Dialog.addChoice("Merge panels", newArray("0","1","2","3"));
	Dialog.addCheckbox("Vertical montage?", false);
	Dialog.show();
	gPanels = Dialog.getChoice();
	mPanels = Dialog.getChoice();
	vChoice = Dialog.getCheckbox();

	setBatchMode(true);
	// if vertical montage, rotate all images left
	if (vChoice == true) {
		for (i = 0; i < numImages; i ++)	{
			selectImage(i+1);
			run("Rotate 90 Degrees Left");
		}
	}
	// Image choices
	gVar = parseInt(gPanels);
	mVar = parseInt(mPanels);
	// Make arrays to hold image choices
	gNameArray = newArray(gVar);
	mNameArray = newArray(mVar*7);

	// Next dialog
	grout = 8;
	mPrefixArray = newArray("R","G","B","Gy","Cn","Ma","Yw");
	mColourArray = newArray("Red","Green","Blue","Gray","Cyan","Magenta","Yellow");
	Dialog.create("Pick your panels");
	Dialog.addMessage("Select order for grayscale");
	
	// variations based on number of grayscale panels
	for (i = 1; i <= gVar; i ++) {
		Dialog.addChoice("G" + i + " Gray Panel " + i, colArray, colArray[i-1]);
	}
	// variations based on merges
	for (i = 1; i <= mVar; i ++) {
		// if mVar is 0 the loop is skipped
		if (mVar == 1) {
			Dialog.addMessage("Select channels for merge");
		} else {
			Dialog.addMessage("Select channels for merge " + i);
		}
		for (j = 0; j < 7; j ++) {
			if (mVar == 1) {
				Dialog.addChoice(mColourArray[j], mArray);
			} else {
				Dialog.addChoice(mPrefixArray[j] + i + " " + mColourArray[j], mArray);
			}
		}

	}
	Dialog.addNumber("Grout size (pixels):", grout);
	Dialog.addNumber("dpi", 300);
	Dialog.addCheckbox("Include scale bar?", false);
	Dialog.addNumber("Scale bar size (µm):", 10);
	Dialog.addNumber("Scaling, 1 px is how many µm?", pixelWidth);
	Dialog.addMessage("If the scale is 0.069, check the actual pixel size of your image.")
	Dialog.show();
	
	// variations based on channels
	for (i = 1; i <= gVar; i ++) {
		gNameArray[i-1] = Dialog.getChoice();
	}

	// variations based on merges
	for (i = 1; i <= mVar; i ++) {
		for (j = 0; j < 7; j ++) {
			mNameArray[(i-1) * 7 + j] = Dialog.getChoice();
		}
	}

	grout = Dialog.getNumber();
	res = Dialog.getNumber();
	sbchoice = Dialog.getCheckbox();
	sblen = Dialog.getNumber();
	mag = Dialog.getNumber();
	// decisions collected

	// collect details from images
	newName = "mtg_" + safeName(win);

	generateMontage(newName, vChoice, gVar, mVar, ww, hh, grout, res, sbchoice, sblen, mag, gNameArray, mNameArray);

	//save montage
	path = dir + newName;
	if(!endsWith(path, ".tif")) {
		path = path + ".tif";
	}
	saveAs("TIFF", path);
	setBatchMode(false);
	// close originals
	for (i = 0; i < imgArray.length; i ++)	{
		selectImage(imgArray[i]);
		close();
	}
}

// this function will either make a montage from every tif in the source Directory
// or it will make a stacked montage. opt is boolean to select behaviour
// dir1 is the input Directory
// dir2 is the output Directory
// origName is the originating filename, "none" if opt is true (not used)
// sliceNames is an array of slice names if it is a stacked montage, , "none" if opt is true (not used)
function montageMakerMulti(dir1, dir2, opt, origName, sliceNames)	{

	list = getFileList(dir1);

	tiffnum = 0;
	if(opt == true) {
		// How many TIFFs do we have? Directory could contain other directories.
		for (i = 0; i < list.length; i ++) {
			if (endsWith(toLowerCase(list[i]), ".tif"))
				tiffnum = tiffnum + 1;
		}
	 	tifflist = newArray(tiffnum);
		mtglist = newArray(tiffnum);
		j = 0;
		for (i = 0; i < list.length; i ++) {
			if (endsWith(toLowerCase(list[i]), ".tif")) {
				tifflist[j] = list[i];
				mtglist[j] = "mtg_" + safeName(list[i]) + ".tif";
				j = j + 1;
			}
		}
	} else {
		// How many mmTemp TIFFs do we have? Directory could contain other directories.
		for (i = 0; i < list.length; i ++) {
			if (startsWith(list[i], "mmTemp") && endsWith(toLowerCase(list[i]), ".tif"))
				tiffnum = tiffnum + 1;
		}
	 	tifflist = newArray(tiffnum);
		mtglist = newArray(tiffnum);
		j = 0;
		for (i = 0; i < list.length; i ++) {
			if (startsWith(list[i], "mmTemp") && endsWith(toLowerCase(list[i]), ".tif")) {
				tifflist[j] = list[i];
				mtglist[j] = "mtg_" + list[i] + ".tif";
				j = j + 1;
			}
		}
	}
	// check we actually have tiffs to process
	if(tiffnum == 0) exit("No TIFFs to process!");

	// make the choice of what we will do
	Dialog.create("Montage Choice");
	Dialog.addMessage("How many grayscale panels?");
	Dialog.addChoice("Gray panels", newArray("1","2","3","4","5","6","7"));
	Dialog.addMessage("How many merge panels?");
	Dialog.addChoice("Merge panels", newArray("0","1","2","3"));
	Dialog.addCheckbox("Vertical montage?", false);
	Dialog.show();
	gPanels = Dialog.getChoice();
	mPanels = Dialog.getChoice();
	vChoice = Dialog.getCheckbox();

	// Image choices
	gVar = parseInt(gPanels);
	mVar = parseInt(mPanels);
	// Make arrays to hold image choices
	gNameArray = newArray(gVar);
	mNameArray = newArray(mVar*7);

	// for colArray and mArray we don't know what we have but we have 7 channel max
	colArray = newArray("C1","C2","C3","C4","C5","C6","C7");
	mArray = newArray("*None*","C1","C2","C3","C4","C5","C6","C7");

	//Next dialog
	grout = 8;
	mPrefixArray = newArray("R","G","B","Gy","Cn","Ma","Yw");
	mColourArray = newArray("Red","Green","Blue","Gray","Cyan","Magenta","Yellow");
	Dialog.create("Pick your panels");
	Dialog.addMessage("Select order for grayscale");
	// variations based on number of grayscale panels
	for (i = 1; i <= gVar; i ++) {
		Dialog.addChoice("G" + i + " Gray Panel " + i, colArray, colArray[i-1]);
	}
	// variations based on merges
	for (i = 1; i <= mVar; i ++) {
		// if mVar is 0 the loop is skipped
		if (mVar == 1) {
			Dialog.addMessage("Select channels for merge");
		} else {
			Dialog.addMessage("Select channels for merge " + i);
		}
		for (j = 0; j < 7; j ++) {
			if (mVar == 1) {
				Dialog.addChoice(mColourArray[j], mArray);
			} else {
				Dialog.addChoice(mPrefixArray[j] + i + " " + mColourArray[j], mArray);
			}
		}

	}

	Dialog.addNumber("Grout size (pixels):", 8);
	Dialog.addNumber("dpi", 300);
	Dialog.addCheckbox("Include scale bar?", false);
	Dialog.addNumber("Scale bar size (µm):", 10);
	Dialog.addNumber("Scaling,1 px is how many µm?", 0.069);
	Dialog.show();
	// variations based on channels
	for (i = 1; i <= gVar; i ++) {
		gNameArray[i-1] = Dialog.getChoice();
	}

	// variations based on merges
	for (i = 1; i <= mVar; i ++) {
		for (j = 0; j < 7; j ++) {
			mNameArray[(i-1) * 7 + j] = Dialog.getChoice();
		}
	}
	grout = Dialog.getNumber();
	res = Dialog.getNumber();
	sbchoice = Dialog.getCheckbox();
	sblen = Dialog.getNumber();
	mag = Dialog.getNumber();
	// decisions collected

	setBatchMode(true);
	for (i = 0; i < tifflist.length; i ++)	{
		input = dir1 + tifflist[i];
		output = dir2 + mtglist[i];
		open(input);
		win = getTitle();
		getDimensions(ww, hh, cc, ss, ff);
		okVar = checkImageForMontage(win);
		if (okVar == true) {
			newName = mtglist[i];
			// if vertical montage, rotate all images left
			if (vChoice == true) run("Rotate 90 Degrees Left");
			// first we will split the stack and make an array of the correct order
			run("Stack to Images");
			theWinList = getListOfImages();
			gWinArray = convertChoicesToWindows(gNameArray,theWinList);
			mWinArray = convertChoicesToWindows(mNameArray,theWinList);
			generateMontage(newName, vChoice, gVar, mVar, ww, hh, grout, res, sbchoice, sblen, mag, gWinArray, mWinArray);
			// save montage
			if(!endsWith(output, ".tif")) {
				output = output + ".tif";
			}
			saveAs("TIFF", output);
			run("Close All");
		}
	}
	// if we are processing a stack montage, we need to stack them and clean up
	if (opt == false) {
		// stack the montages
		File.openSequence(dir2, "filter=(^mtg_mmTemp) step=1 scale = 100.0");
		newName = "mtg_" + safeName(origName);
		rename(newName);
		
		// relabel the slices
		getDimensions(ww, hh, cc, ss, ff);
		// the stack should be a stack but to be safe
		if (ss > 1 || ff > 1) {
			if (ss > 1) {
				sliceMax = ss;
			} else if (ff > 1) {
				sliceMax = ff;
			}
			for (i = 0; i < sliceMax; i++) {
				if (ss > 1) {
					setSlice(i + 1);
				} else if (ff > 1) {
					setFrame(i + 1);
				}
				setMetadata("Label", sliceNames[i]);
			}
		}

		// clean up
		for (i = 0; i < tifflist.length; i ++) {
			ok = File.delete(dir1 + tifflist[i]);
		}
		for (i = 0; i < mtglist.length; i ++) {
			ok = File.delete(dir2 + mtglist[i]);
		}

		// save montage
		output = dir2 + newName;
		if(!endsWith(output, ".tif")) {
			output = output + ".tif";
		}
		saveAs("TIFF", output);
		run("Close All");
	}
	setBatchMode(false);
}

function mtgcomp()	{
	imgArray = newArray(nImages);
	rowArray = newArray(nImages);
	nameArray = newArray(nImages);
	widthArray = newArray(nImages);
	heightArray = newArray(nImages);
	for (i = 0; i < nImages; i ++)	{
		selectImage(i + 1);
		imgArray[i] = getImageID();
		title = getTitle();
		rowArray[i] = title;
		getDimensions(ww, hh, cc, ss, ff);
		widthArray[i] = ww;
		heightArray[i] = hh;
	}
	// check the widths are the same;
	Array.getStatistics(widthArray, min, max, mean, stdDev);
	if (stdDev != 0) exit ("Images have unequal widths");
	theWidth = mean;
	// check the widths are the same;
	Array.getStatistics(heightArray, min, max, mean, stdDev);
	if (stdDev != 0) exit ("Images have unequal heights");
	theHeight = mean;
	// vChoice is true if we will compile columns horizontally
	// vChoice is false (default) means compiling rows vertically
	vChoice = false;
	if (theHeight > theWidth) vChoice = true;
	len = imgArray.length;

	// Standard sizes
	grout = 16;
	res = 300;
	sblen = 10;
	mag = 0.069;
	// estimate grout
	if(vChoice) {
		estgrout = groutEstimator(theHeight,theWidth);
	} else {
		estgrout = groutEstimator(theWidth,theHeight);
	}
	if (estgrout > 0) grout = estgrout * 2;
	// Make dialog box
	Dialog.create("Compile the montages");
	// variations based on number of files
	if (vChoice == true)	{
		Dialog.addMessage("Detected columns.\rSelect order for your compilation, left to right");
	}
	else {
		Dialog.addMessage("Detected rows.\rSelect order for your compilation, top to bottom");
	}
	for (i = 0; i < len; i ++)	{
		labStr = d2s(i+1,0);
		Dialog.addChoice(labStr, rowArray);
	}
	Dialog.addNumber("Row gap (px, default = 2 x grout):", grout);
	Dialog.addNumber("dpi", res);
	Dialog.addCheckbox("Include scale bar?", false);
	Dialog.addNumber("Scale bar size (µm):", sblen);
	Dialog.addNumber("Scaling, 1 px is how many µm?", mag);
	Dialog.addCheckbox("Force other orientation:", false);
	Dialog.show();
	// variations based on number of files
	for (i = 0; i < len; i ++)	{
		nameArray[i] = Dialog.getChoice();
	}
	grout = Dialog.getNumber();
	res = Dialog.getNumber();
	sbchoice = Dialog.getCheckbox();
	sblen = Dialog.getNumber();
	mag = Dialog.getNumber();
	forceChoice = Dialog.getCheckbox();
	// forceChoice reverses the logic of vChoice
	if(vChoice == true && forceChoice == true) vChoice = false;
	else if(vChoice == false && forceChoice == true) vChoice = true;
	// decisions collected
	setBatchMode(true);

	// setup for save
	win = getTitle();
	dir1 = getDirectory("image");
	newName = "cmp" + len + win;

	// get dimensions
	wArray = newArray(len);
	hArray = newArray(len);
	hPosArray = newArray(len+1);
	hPosArray[0] = 0;
	width = 0;
	height = 0;
	for (i=0; i<len; i++)	 {
		selectImage(nameArray[i]);
		if (vChoice == true)
			run("Rotate 90 Degrees Right");
		getDimensions(w, h, c, slices, frames);
		wArray[i] = w;
		hArray[i] = h;
		hPosArray[i+1] = hPosArray[i] + h;
		width = width + w;
		height = height + h;
	}
	// check widths are the same
	if (width / len != w)	{
		print("Check widths");
	}
	newImage(newName, "RGB", w, height + (grout * (len - 1)), 1);
	for (i=0; i<len; i++)	 {
		selectImage(nameArray[i]);
		run("Select All");
		run("Copy");
		close();
		selectImage(newName);
		makeRectangle(0, (hPosArray[i])+(grout*i), wArray[i], hArray[i]);
		run("Paste");
	}
	// now put back?
	if (vChoice == true)
		run("Rotate 90 Degrees Left");
	//add scale bar (height is same as grout)
	if (sbchoice==true)	{
		getDimensions(w, h, c, slices, frames);
		setColor(255,255,255);
		fillRect(w-((grout/2)+(sblen/mag)), h-(2*(grout/2)), sblen/mag, grout/2);
	}
	//specify dpi default is 300 dpi
	run("Set Scale...", "distance=res known=1 unit=inch");
	run("Select None");
	//save montage
	path = dir1 + newName;
	if(!endsWith(path, ".tif")) {
		path = path + ".tif";
	}
	saveAs("TIFF", path);
	// save a log file
	path = substring(path,0,lengthOf(path) - 4) + ".txt";
	f = File.open(path);
		print(f, "MONTAGE COMPILER");
		print(f, "Name of Montage:");
		print(f, newName);
		if(vChoice == true) {
			print(f, "Montage of columns (left to right):");
		} else{
			print(f, "Montage of rows (top to bottom):");
		}
		for (i=0; i<len; i++)	 {
			print(f, d2s(i+1,0) + " - " + nameArray[i]);
		}
		print(f, "Grout: " + grout);
		if(sbchoice == true) {
			print(f, "Scale bar: " + sblen + " um. Pixel size: " + mag);
		}
	File.close(f);
	setBatchMode(false);
}

function safeName(s)	{
	// need to replace some characters to allow save to work properly
	s = replace(s,"c:","");
	s = replace(s,"/","");
	s = replace(s,"\\(","");
	s = replace(s,"\\)","");
	s = replace(s,".tif","");
	s = replace(s," ","_");

	return s;
}

function checkImageForMontage(name)	{
	selectWindow(name);
	checker = false;
	// determine what we are dealing with
	getDimensions(ww, hh, cc, ss, ff);
	// warn if image is not square
	if (ww != hh) print("Input image is not square");
	//
	if (bitDepth() == 8 || bitDepth() == 16) {
		if (cc == 1) exit ("Need more than one channel");
		if (cc * ss * ff == 1) exit ("Need more than one channel, slice, or frame");
		if (ss > 1 && ff > 1) exit ("Reduce dimensions before making montage");
		if (cc > 1 && ss * ff == 1) checker = true;
		// if cc is 1 or more AND either ss or ff is > 1; checker stays false
	} else if (bitDepth() == 24) {
		// it is possible to have an RGB hyperstack, so the only acceptable
		// form for a montage is a single RGB image
		if (cc * ss * ff == 1) {
			run("Split Channels");
			run("Images to Stack");
			checker = true;
		}
	} else exit ("Input image does not meet requirements for montage");
	
	return checker;
}

function getListOfImages()	{
	numImages = nImages;
	winArray = newArray(numImages);
	for (i = 0; i < numImages; i ++)	{
		selectImage(i + 1);
		winArray[i] = getTitle();
		// ensure grayscale while we are here
		run("Grays");
	}
	return winArray;
}

function convertChoicesToWindows(choiceArray,winArray)	{
	convertedArray = newArray(choiceArray.length);
	for (i = 0; i < choiceArray.length; i ++)	 {
		arrayItem = choiceArray[i];
		if (choiceArray[i] == "*None*")	{
			convertedArray[i] = "*None*";
		} else	{
			lookupInteger = parseInt(replace(arrayItem,"C",""));
			convertedArray[i] = winArray[lookupInteger - 1];
		}
	}
	return convertedArray;
}

function generateMontage(newName, vChoice, gVar, mVar, width, height, grout, res, sbchoice, sblen, mag, gNameArray, mNameArray)	{
	len = gVar + mVar;
	newImage(newName, "RGB", ((width * len) + (grout * (len - 1))), height, 1);
	// paste in grayscales
	for (j = 0; j < gVar; j++)	 {
		wName = gNameArray[j];
		selectImage(wName);
		run("Copy");
		selectImage(newName);
		makeRectangle((width * j) + (grout * j), 0, width, height);
		run("Paste");
	}

	// build mergeStringArray
	mergeStringArray = newArray(mVar*7);

	for (i = 1; i <= mVar; i++)	 {
		for (j = 0; j < 7; j++)	 {
			mergeStringArray[(i-1) * 7 + j] = "c" + (j+1) + "=[" + mNameArray[(i-1) * 7 + j] + "] ";
		}
	}
	
	// make array to hold merge names
	mImgArray = newArray(mVar);
	for (i = 0; i < mVar; i++)	 {
		mImgArray[i] = "mrg" + d2s(i+1,0);
	}

	// paste in the merge(s)
	for (i = 0; i < mVar; i++)	 {
		mString = mergeStringArray[i * 7 + 0] + mergeStringArray[i * 7 + 1] + mergeStringArray[i * 7 + 2] + mergeStringArray[i * 7 + 3] + mergeStringArray[i * 7 + 4] + mergeStringArray[i * 7 + 5] + mergeStringArray[i * 7 + 6];
		run("Merge Channels...", mString + "keep");
		rename(mImgArray[i]);
		selectImage(mImgArray[i]);
		run("Copy");
		selectImage(newName);
		makeRectangle(((width * gVar) + (grout * gVar)) + ((width * i) + (grout * i)), 0, width, height);
		run("Paste");
	}
	selectImage(newName);
	// rotate right?
	if (vChoice == true)
		run("Rotate 90 Degrees Right");

	// add scale bar (height of bar is same as grout)?
	if (sbchoice==true)	{
		getDimensions(w, h, c, slices, frames);
		setColor(255,255,255);
		fillRect(w - (grout + (sblen / mag)), h - (2 * grout), sblen / mag, grout);
	}
	// specify dpi default is 300 dpi
	run("Set Scale...", "distance=" + res + " known=1 unit=inch");
	run("Select None");
}

function groutEstimator(ww,hh) {
	// we assume that montage is 1 panel high (hh) and that panel is square (ww == hh)
	// if is a vertical montage, width and height are swapped before as parameters
	// grout is unlikely to be more than half a panel width
	estNPanel = floor(ww / hh);
	estW = hh;
	totalGrout = ww - (estW * estNPanel);
	grout = totalGrout / (estNPanel - 1);
	if(estNPanel <= 1) return 0;
	return grout;
}

// --------------------------------------------------------------------------------
// Change Montage Merge Functions
// --------------------------------------------------------------------------------

function autoChangeMontage(lutstring) {
// assumes merge is on the right/bottom and therefore not inverted
	lutarray = makeLutArray(lutstring);
	custarray = makeCustArray(lutstring);
	lutdir = getDirectory("luts");
	title = getTitle();
	dir1 = getDirectory("image");
	newName = "RGB2" + lutstring + "_" + title;
	run("Select None");
	getDimensions(w, h, c, numSlices, nFrames);
	// deal with multiple frames or slices
	nShots = maxOf(numSlices,nFrames);
	if (numSlices > 1 && nFrames > 1) exit("Number of slices and frames is greater than one");
	if (numSlices == 1) sliceOrFrame = 0;
	if (numSlices > 1) sliceOrFrame = 1;
	if (nFrames > 1) sliceOrFrame = 2;

	// work out grout size
	if (w == h) {
		nCol = 1;
		nRow = 1;
		grout = 0;
		nPanel = 1;
		vChoice = "";
		ww = w;
		hh = h;
	}
	else if (w > h)	{
		nCol = floor(w/h);
		nRow = 1;
		grout = (w - (nCol * h)) / (nCol - 1);
		nPanel = nCol;
		vChoice = "";
		ww = h;
		hh = h;
	}
	else {
		nCol = 1;
		nRow = floor(h/w);
		grout = (h - (nRow * w)) / (nRow - 1);
		nPanel = nRow;
		vChoice = "vert";
		ww = w;
		hh = w;
	}

	// collect decisions
	panelDecisions = newArray(nPanel);
	for (i=0; i<nPanel; i++)	{
		panelDecisions[i] = false;
	}
	panelDecisions[nPanel - 1] = true;

	for (i=0; i<nPanel; i++)	{
		if (panelDecisions[i] == 1)	{
			run("Select None");
			// top left of panel is
			if (vChoice == "vert") {
				xq = 0 + 0; // --for future dev
				yq = 0 + (i * (hh + grout));
			} else {
				xq = 0 + (i * (ww + grout));
				yq = 0 + 0; // --for future dev
			}
			for (j=0; j<nShots; j++)	{
				if (sliceOrFrame == 1)
					Stack.setSlice(j+1);
				else if (sliceOrFrame == 2)
					Stack.setFrame(j+1);
				makeRectangle(xq,yq,ww,hh);
				// run routine here ----
				run("Copy");
				newImage("tmpMrg", "RGB", ww, hh, 1);
				run("Paste");
				run("Make Composite");
				run("16-bit");
				for (k=0; k<3; k++) {
					Stack.setChannel(k+1);
					if(custarray[k] == 1) {
						lut = lutdir + lutarray[k];
						open(lut);
					} else {
						run(lutarray[k]);
					}
				}
				run("RGB Color");
				selectWindow("tmpMrg (RGB)");
				run("Select All");
				run("Copy");
				selectWindow(title);
				run("Paste");
				// end routine ----
				run("Select None");
				// close temp windows
				selectWindow("tmpMrg");
				close();
				selectWindow("tmpMrg (RGB)");
				close();
			}
		}
	}

	selectWindow(title);
	run("Select None");
	path = dir1 + newName;
	if(!endsWith(path, ".tif")) {
		path = path + ".tif";
	}
	saveAs("TIFF", path);
}

function lutCheck() {
	// quantixed update site installs a copy of CRL_OPF luts from NeuroCytoLUTs
	check = true;
	lutdir = getDirectory("luts");
	path = lutdir + "q_OPF orange.lut";
	if(!File.exists(path)) check = false;
	path = lutdir + "q_OPF fresh.lut";
	if(!File.exists(path)) check = false;
	path = lutdir + "q_OPF purple.lut";
	if(!File.exists(path)) check = false;
	return check;
}

function makeLutArray(s) {
	// string should be any of the following letters
	s = toUpperCase(s);
	// R, G, B, M, Y, C, W, O, F, P
	// R = Red, G = Green, B = Blue
	// M = Magenta, Y = Yellow, C = Cyan
	// W = Grays
	// O = Orange, F = Fresh, P = Purple
	lutarray = newArray(3);
	for (i=0; i<3; i++) {
		t = substring(s, i, i+1);
		if (t == "R") {
			lutarray[i] = "Red";
		} else if (t == "G") {
			lutarray[i] = "Green";
		} else if (t == "B") {
			lutarray[i] = "Blue";
		} else if (t == "M") {
			lutarray[i] = "Magenta";
		} else if (t == "Y") {
			lutarray[i] = "Yellow";
		} else if (t == "C") {
			lutarray[i] = "Cyan";
		} else if (t == "W") {
			lutarray[i] = "Grays";
		} else if (t == "O") {
			lutarray[i] = "q_OPF orange.lut";
		} else if (t == "F") {
			lutarray[i] = "q_OPF fresh.lut";
		} else if (t == "P") {
			lutarray[i] = "q_OPF purple.lut";
		} else {
			 exit ("Unknown LUT specification: " + t);
		}
	}
	
	return lutarray;
}

function makeCustArray(s) {
	// string should be any of the following letters
	s = toUpperCase(s);
	// R, G, B, M, Y, C, W (normal)
	// O = Orange, F = Fresh, P = Purple (custom)
	custarray = newArray(3);
	for (i=0; i<3; i++) {
		t = substring(s, i, i+1);
		if (t == "R" || t == "G" || t == "B" || t == "M" || t == "Y" || t == "C" || t == "W") {
			custarray[i] = 0;
		} else {
			custarray[i] = 1;
		}
	}
	
	return custarray;
}

function correctDirEnding(s) {
	if(endsWith(s, "/")) input = substring(s, 0, (lengthOf(s)-1));
	if(!endsWith(s, "/") | !endsWith(s,"\\")) s = s + File.separator;
	return s;
}

// function to create directory tree recursively
function makeDirectoryTree(path) {
	path = correctDirEnding(path);
	if (File.exists(path)) return;
	
	// find parent directory
	parent = File.getParent(path);
	if (!File.exists(parent)) {
		makeDirectoryTree(parent);
	}
	
	// create this directory
	File.makeDirectory(path);
}
